<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT30S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index>0</spk:Index>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SkipUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeSpanWindow">
          <rx:TimeSpan>PT10S</rx:TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>VideoOut</Name>
        <Description>Double-click to reveal VideoWriter and set video properties</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>test-050821\test-050821.avi</cv:FileName>
                <cv:Suffix>FileCount</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>25</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeSpanWindow">
          <rx:TimeSpan>PT10S</rx:TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>CSVOut</Name>
        <Description>Double-click to reveal CSVWriter and set CSV  properties</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>test-050821\timestamp.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SkipUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>test-050821\test-05821.tiff</cv:Path>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="5" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="2" To="15" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="3" To="5" Label="Source2" />
      <Edge From="3" To="8" Label="Source2" />
      <Edge From="3" To="13" Label="Source2" />
      <Edge From="3" To="15" Label="Source2" />
      <Edge From="3" To="16" Label="Source2" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="10" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>